PsychoPy2experiment version="2026.1.0"
Settings
  expName = ldt
  runMode = 1
  Experiment info = {"participant":"1","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    CodeComponent trialTiming
      Code Type = Py
      Begin Routine:
        targetFrame = fixFrames + round(soa * refreshHz / 1000)
        firstInterval = len(win.frameIntervals)
        dropsAtStart = win.nDroppedFrames
        win.recordFrameIntervals = True
      End Routine:
        win.recordFrameIntervals = False
        thisExp.addData('dropped_frames', win.nDroppedFrames - dropsAtStart)
        thisExp.addData('recorded_intervals', len(win.frameIntervals) - firstInterval)
        thisExp.addData('trial_last_flip', float(win.lastFrameT))
    TextComponent fixation
      startVal [frame N] = 0
      stopVal [duration (frames)] = fixFrames
      text = +
      letterHeight = 0.05
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    TextComponent prime_text
      startVal [frame N] = fixFrames
      stopVal [duration (frames)] = primeFrames
      text [set every repeat] = $prime
      letterHeight = 0.05
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    TextComponent target_text
      startVal [frame N] = targetFrame
      stopVal [duration (frames)] = responseFrames
      text [set every repeat] = $target.upper()
      letterHeight = 0.05
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    KeyboardComponent decision
      startVal [frame N] = targetFrame
      stopVal [duration (frames)] = responseFrames
      forceEndRoutine = True
      allowedKeys = ["f","j"]
      store = first key
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    CodeComponent scoreTrial
      Code Type = Py
      End Routine:
        expectedKey = wordKey if correct_response == 'word' else nonwordKey

        def storeResponse(keyName, keyRT):
            correct = int(keyName == expectedKey)
            thisExp.addData('key', keyName)
            thisExp.addData('rt', keyRT)
            thisExp.addData('accuracy', correct)
            thisExp.addData('timeout', int(keyName == ''))
            if keyName == '':
                return 'Too slow'
            return 'Correct' if correct else 'Incorrect'

        pressed = decision.keys in ('f', 'j') and 0 <= decision.rt <= 2.0
        pendingDeadline = not pressed
        if pressed:
            feedbackMessage = storeResponse(decision.keys, decision.rt)
        else:
            feedbackMessage = ''
            def finishResponseWindow():
                # The deadline flip has removed the target. Include queued events
                # through 2.000 s, including ones after the final drawing iteration.
                remaining = 2.0 - decision.clock.getTime()
                if remaining > 0:
                    core.wait(remaining)
                keys = decision.getKeys(keyList=['f', 'j'], waitRelease=False)
                valid = [k for k in keys if 0 <= k.rt <= 2.0]
                event = min(valid, key=lambda k: k.rt) if valid else None
                message = storeResponse(event.name, event.rt) if event else storeResponse('', '')
                currentLoop.addData('decision.keys', event.name if event else None)
                currentLoop.addData('decision.rt', event.rt if event else None)
                currentLoop.addData('decision.duration', event.duration if event else None)
                if phase == 'practice':
                    feedbackText.setText(message)
            win.callOnFlip(finishResponseWindow)

        thisExp.addData('prime_shown', prime_text.text)
        thisExp.addData('target_shown', target_text.text)
        thisExp.addData('prime_onset', thisExp.thisEntry['prime_text.started'])
        thisExp.addData('target_onset', thisExp.thisEntry['target_text.started'])
  Routine instructions
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    CodeComponent setupTask
      Code Type = Py
      Begin Experiment:
        win.recordFrameIntervals = False
        win.frameIntervals.clear()
        win.refreshThreshold = 1.5 * frameDur
      Begin Routine:
        participantNumber = int(expInfo['participant'])
        listPath = f'trial_lists/trials_p{participantNumber:02d}.csv'
        wordKey, nonwordKey = ('f', 'j') if participantNumber % 2 else ('j', 'f')
        if not expInfo.get('frameRate'):
            raise RuntimeError('Refresh rate could not be measured. Restart on a display with a stable refresh rate.')
        refreshHz = round(expInfo['frameRate'])
        fixFrames = round(0.5 * refreshHz)
        primeFrames = round(0.15 * refreshHz)
        responseFrames = round(2 * refreshHz)
      End Experiment:
        win.callOnFlip(win.saveFrameIntervals, fileName=thisExp.dataFileName + '_frameIntervals.log')
    TextComponent instructionText
      startVal [time (s)] = 0
      text [set every repeat] = $f'Look at the UPPERCASE letters.\n\nPress {wordKey.upper()} for a real English word.\nPress {nonwordKey.upper()} for a made-up word.\n\nUse the keys by themselves. Press SPACE to begin practice.'
      letterHeight = 0.05
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    KeyboardComponent beginKey
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = ["space"]
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  Routine feedback
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    TextComponent feedbackText
      startVal [frame N] = int(pendingDeadline)
      stopVal [duration (frames)] = refreshHz
      text [set every repeat] = $feedbackMessage
      letterHeight = 0.05
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  Routine interval
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    TextComponent blankScreen
      startVal [frame N] = 0
      stopVal [duration (frames)] = fixFrames
      letterHeight = 0.05
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  Routine rest
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    TextComponent breakText
      startVal [time (s)] = 0
      letterHeight = 0.05
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      text:
        Practice is complete. Take a break.

        Press SPACE to start the main trials.
    KeyboardComponent resumeKey
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = ["space"]
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  Routine endScreen
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    TextComponent endText
      startVal [frame N] = 0
      stopVal [duration (frames)] = responseFrames
      text = Thank you. The task is complete.
      letterHeight = 0.05
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Flow
  Routine instructions
  LoopInitiator practice_loop loopType="TrialHandler"
    loopType = sequential
    conditionsFile = $listPath
    nReps = 1
    Selected rows = 0:8
    conditions = []
    endPoints = [0,1]
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    Routine trial
    Routine feedback
    Routine interval
  LoopTerminator practice_loop
  Routine rest
  LoopInitiator main_loop loopType="TrialHandler"
    loopType = sequential
    conditionsFile = $listPath
    nReps = 1
    Selected rows = 8:104
    conditions = []
    endPoints = [0,1]
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    Routine trial
    Routine interval
  LoopTerminator main_loop
  Routine endScreen
